OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  8-30Hz

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> 0x341d3912 Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-[$core{date}-$core{time}].ov
  Use compression = false
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#0.Stimulations -> 0x341d3912 GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/online-motor-imagery-1-[$core{date}-$core{time}].gdf

Generic stream reader => #3
  Filename =
#3.Output Signal -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.082114e-001 4.685760e-001 -3.544043e-002 4.573300e-002 -2.572461e-002 2.025501e-002 -2.813483e-001 -1.096762e-001 3.726331e-002 -5.267634e-001 -5.803814e-002 2.409423e-001 -4.485025e-002 7.282470e-002 4.555725e-001 1.448566e-002 1.386524e-001 -9.009798e-002 -1.780710e-001 1.256969e-001 -5.130940e-002 2.987887e-002 -6.050551e-002 9.617017e-002 4.416526e-002 -7.618225e-002 2.121995e-002 -4.789311e-002 1.209106e-001 -7.247473e-003 3.267675e-002 1.537727e-002 -9.382764e-004 -5.727098e-003 -1.732264e-003 -2.238397e-003 1.155525e-002 8.075033e-003 7.448413e-004 -2.110711e-002 2.822916e-003 -3.109532e-002 6.749932e-003 9.074530e-003 1.675107e-002 5.889398e-003 1.221918e-002 5.992729e-003 6.732111e-003 -1.274952e-002 1.696124e-004 -2.419000e-004 2.906963e-002 -2.428724e-004 -3.349322e-002 1.252463e-002 -1.540250e-002 5.111605e-002 -7.378641e-001 -7.269145e-003 2.729030e-002 1.020217e-002 6.687131e-001 -2.451945e-003
  Number of Output Channels = 2
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = D:/_Thanos/git/neurow-cuebased/OV-scenarios/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#11.Probability values -> Analog VRPN Server
  Peripheral name = openvibe-vrpn
#3.Output Stimulations -> Identity => #13
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Stimulations=#13, Amplitude=#11.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Analog VRPN Client => #16
  Peripheral name = openvibe-vrpn@localhost
  Sampling Rate = 512
  Number of Channels = 2
  Sample Count per Sent Block = 32
-> 0x341d3912 Channel Selector "1" => #17
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#16 -> 0x341d3912 Channel Selector "2" => #18
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input - A=#17, Input - B=#18 -> 0x341d3912 Simple DSP => #19
  Equation = A-B
Data=#19 -> 0x341d3912 Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
0x341d3912 Graz Motor Imagery BCI Stimulator => #21
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input signal=#19, Input stimulations=#21 -> 0x341d3912 LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
