OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = C:/Users/neuro/Desktop/NeuRow/3_neurow/ROW-FB.gdf
#0.Output stream 2 -> Channel Selector "BCI-SSVEP channels"
  Channel List = 3:8; 10:14; 16:19; 21:25; 27:30
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Left
-> Windowing => #5
  Window method = Hamming
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Right
-> Windowing => #7
  Window method = Hamming
Timeout => #8
  Timeout delay = 492
  Output Stimulation = OVTK_StimulationId_Label_00
Input stimulations 1=#3.Output stream 2, Input stimulations 2=#8 -> Stimulation multiplexer => #9
Stimulations=#9, Signal condition 1=#5, Signal condition 2=#7 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/neuro/Documents/Neurow2020/BCI_SSVEP/Data/CSP_filter/[$core{date}-$core{time}].gdf
  Filter dimension = 4
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
