OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  BLOCK
Comment
  Used for NeuRow Training
Comment
  pause on start
Comment
  PRESS PLAY when MR sequence starts

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = C:/Users/Audrey/AppData/Roaming/openvibe-2.2.0/scenarios/NeuRowCueVR/OV-scenarios/motor-imagery-bci-graz-stimulator-fmri-block.lua
  Number of Trials for Each Class = 4
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 0
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 1.500
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 2.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStart
  Action to perform = Pause
Input stimulations=#0 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

GDF file reader => #6
  Filename = C:/Users/Audrey/AppData/Roaming/openvibe-2.2.0/scenarios/NeuRowCueVR/OV-scenarios/signals/block-motor-imagery-block-1-[2020.07.29-14.13.55].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
Data=#6.EEG stream, Stimulations=#6.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#6.Experiment information, Input stream 2=#6.EEG stream, Input stream 3=#6.Stimulations -> Generic stream writer
  Filename = C:/Users/Audrey/AppData/Roaming/openvibe-2.2.0/scenarios/NeuRowCueVR/OV-scenarios/signals/block-motor-imagery-1-[$core{date}-$core{time}].ov
  Use compression = false
Experiment information=#6.Experiment information, Signal=#6.EEG stream, Stimulation=#6.Stimulations -> GDF file writer
  Filename = C:/Users/Audrey/AppData/Roaming/openvibe-2.2.0/scenarios/NeuRowCueVR/OV-scenarios/signals/block-motor-imagery-block-1-[$core{date}-$core{time}].gdf
