OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Train CSP
Comment
  Lisbon Hamming - Training
Comment
  8-45 Hz
Comment
  AF: 205
  FB: 470
  S01: 300

Generic stream reader => #0
  Filename = C:/Users/Audrey/OneDrive/Desktop/M-ITI/NeuRow2019/NeuAugVR2020/Scenarios-Hospital/Data/C01/C01-NeuRow.ov
#0.Output stream 2 -> Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 1
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Left
-> Windowing => #5
  Window method = Hamming
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Right
-> Windowing => #7
  Window method = Hamming
Data=#0.Output stream 2, Stimulations=#0.Output stream 3 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Timeout => #9
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#3.Output stream 2, Input stimulations 2=#9 -> Stimulation multiplexer => #10
Stimulations=#10, Signal condition 1=#5, Signal condition 2=#7 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/Audrey/Documents/Lisbon_data/Lisbon_data/newGame/3_neurow/ROW-S01-csp.gdf
  Filter dimension = 4
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart

0x341d3912 GDF file reader
  Filename = C:/Users/Audrey/Documents/Lisbon_data/Lisbon_data/newGame/3_neurow/ROW-S01.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
