OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Lisbon Hamming - Classifier
Comment
  8-30Hz
Comment
  AF: 205
  FB: 470
  S01: 300

Generic stream reader => #0
  Filename = C:/Users/Audrey/OneDrive/Desktop/M-ITI/NeuRow2019/NeuAugVR2020/Scenarios-Hospital/Data/C01/C01-NeuRow.ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> CSP Spatial Filter => #3
  Spatial Filter Coefficients = 3.895456e-002 3.778097e-002 2.938309e-002 -9.788274e-002 -3.968528e-002 6.916557e-002 -1.781311e-002 -4.550318e-002 1.838463e-003 -4.318400e-003 -4.758229e-002 8.746883e-002 -8.669490e-002 1.470763e-001 -3.010208e-002 7.847492e-002 -9.258204e-002 -1.588618e-001 3.019603e-002 3.670722e-001 -1.344270e-001 -2.053658e-002 1.669169e-002 -5.694708e-002 1.752974e-002 -7.353498e-001 3.759703e-001 2.223170e-001 5.157963e-002 -2.557718e-002 6.962140e-002 1.587784e-002 -2.299291e-002 8.573178e-002 5.156094e-002 4.208025e-003 -3.231480e-004 -1.741512e-002 -1.317612e-001 1.216400e-001 -1.189420e-002 -1.193133e-002 -1.246434e-001 6.549134e-002 -1.568162e-001 7.802345e-002 1.501166e-001 -4.629385e-001 7.413952e-001 -3.052243e-001 6.240394e-004 4.298791e-002 -2.305681e-002 -1.543605e-002 6.986751e-002 -1.079839e-001 -1.920896e-002 -4.290301e-002 2.369059e-002 4.141804e-002 -3.499206e-003 -5.287728e-002 8.020091e-003 -1.265797e-003
  Number of Output Channels = 2
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = C:/Users/Audrey/OneDrive/Desktop/M-ITI/NeuRow2019/NeuAugVR2020/Scenarios-Hospital/CSP_files/C01/NR-lisbon-hamm-csp.cfg
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Windowing => #5
  Window method = Hamming
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #7
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#5 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #9
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#5 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #11
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#5 -> Channel Selector "4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #13
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#7.Variance, Input - B=#9.Variance, Input - C=#11.Variance, Input - D=#13.Variance -> Simple DSP => #14
  Equation = A+B+C+D
Input - A=#7.Variance, Input - B=#14 -> Simple DSP => #15
  Equation = log(A)-log(B)
Input - A=#9.Variance, Input - B=#14 -> Simple DSP => #16
  Equation = log(A)-log(B)
Input - A=#11.Variance, Input - B=#14 -> Simple DSP => #17
  Equation = log(A)-log(B)
Input - A=#13.Variance, Input - B=#14 -> Simple DSP => #18
  Equation = log(A)-log(B)
Input stream 1=#15, Input stream 2=#16, Input stream 3=#17, Input stream 4=#18 -> Feature aggregator => #19
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Windowing => #21
  Window method = Hamming
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #23
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#21 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #25
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#21 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #27
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#21 -> Channel Selector "4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #29
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#23.Variance, Input - B=#25.Variance, Input - C=#27.Variance, Input - D=#29.Variance -> Simple DSP => #30
  Equation = A+B+C+D
Input - A=#23.Variance, Input - B=#30 -> Simple DSP => #31
  Equation = log(A)-log(B)
Input - A=#25.Variance, Input - B=#30 -> Simple DSP => #32
  Equation = log(A)-log(B)
Input - A=#27.Variance, Input - B=#30 -> Simple DSP => #33
  Equation = log(A)-log(B)
Input - A=#29.Variance, Input - B=#30 -> Simple DSP => #34
  Equation = log(A)-log(B)
Input stream 1=#31, Input stream 2=#32, Input stream 3=#33, Input stream 4=#34 -> Feature aggregator => #35
Timeout => #36
  Timeout delay = 300
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#2.Output stream 2, Input stimulations 2=#36 -> Stimulation multiplexer => #37
Stimulations=#37, Features for class 1=#19, Features for class 2=#35 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/Audrey/OneDrive/Desktop/M-ITI/NeuRow2019/NeuAugVR2020/Scenarios-Hospital/Classifier_files/C01/NR-lisbon-hamm-class.gdf
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 GDF file reader
  Filename = C:/Users/Audrey/Downloads/Lisbon_data/Lisbon_data/BCI_test/2_graz/MI-AF.gdf
  Samples per buffer = 32
  Subtract physical minimum = false

0x341d3912 Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
