OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Graz Visualization box will send the timeline
  markers directly to Acquisition Server using the
  TCP Tagging plugin. The server will then attach them
  appropriately to the EEG stream.
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. This
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 30
  seconds before it starts the instruction sequence.

  You will then be presented left / right arrows to
  let you imagine left / right hand movements.
  There will be 20 arrows of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Make sure to stop scenario at 8 min 50 seconds
  (4 arrows per 1 block & 5 blocks = 20 trials each side)
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = C:/Users/neuro/Desktop/BCI-VR stuff/OV-Scenarios/NeuRowCueBased/motor-imagery-bci-graz-stimulator-fmri-block.lua
  Number of Trials for Each Class = 4
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 30
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 1.500
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750000
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 2.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Input 1=#0, Input 2=#0 -> 0x341d3912 Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_GDF_Left
  Button 1 OFF = OVTK_GDF_End_Of_Trial
  Button 2 ON = OVTK_GDF_Right
  Button 2 OFF = OVTK_GDF_End_Of_Trial
Input stimulations=#0 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#5.Stimulations -> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Data=#5.Signal stream, Stimulations=#0 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#5.Experiment information, Signal=#5.Signal stream, Stimulation=#0 -> GDF file writer
  Filename = C:/Users/neuro/Documents/Neurow2020/Data/GDF/[$core{date}-$core{time}].gdf
Input stream 1=#5.Experiment information, Input stream 2=#5.Signal stream, Input stream 3=#0 -> Generic stream writer
  Filename = C:/Users/neuro/Documents/Neurow2020/Data/OV/[$core{date}-$core{time}].ov
  Use compression = false
