OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Train CSP
Comment
  Lisbon Hamming - Training
Comment
  8-30Hz
Comment
  AF: 205
  FB: 470
  S01: 300
Comment
  CSP-[$core{date}-$core{time}].cfg

0x341d3912 Generic stream reader
  Filename = C:/Users/Audrey/OneDrive/Desktop/M-ITI/NeuRow2019/NeuAugVR2020/Scenarios-Hospital/Data/C01/C01-NeuRow.ov

Generic stream reader => #1
  Filename = C:/Users/neuro/Documents/Neurow2020/Data/OV/[2020.11.23-17.11.28].ov
#1.Output stream 2 -> Channel Selector "BCI-SSVEP channels"
  Channel List = 3:8; 10:14; 16:19; 21:25; 27:30
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#3, Input stream 2=#1.Output stream 3 -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Left
-> Windowing => #6
  Window method = Hamming
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Right
-> Windowing => #8
  Window method = Hamming
Data=#1.Output stream 2, Stimulations=#1.Output stream 3 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Timeout => #10
  Timeout delay = 530
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#4.Output stream 2, Input stimulations 2=#10 -> Stimulation multiplexer => #11
Stimulations=#11, Signal condition 1=#6, Signal condition 2=#8 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/neuro/Documents/Neurow2020/Data/CSP/CSP-[$core{date}-$core{time}].cfg
  Filter dimension = 4
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 GDF file reader
  Filename = C:/Users/Audrey/Documents/Lisbon_data/Lisbon_data/newGame/2_graz/MI-AF.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
