OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Lisbon Hamming - Classifier
Comment
  8-30Hz
Comment
  AF: 205
  FB: 470
  S01: 300
Comment
  Classifier-[$core{date}-$core{time}].cfg

Generic stream reader => #0
  Filename = C:/Users/neuro/Documents/Neurow2020/Data/OV/[2020.11.23-17.11.28].ov
#0.Output stream 2 -> Channel Selector "BCI-SSVEP channels"
  Channel List = 3:8; 10:14; 16:19; 21:25; 27:30
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Data=#3.Output stream 1, Stimulations=#3.Output stream 2 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3.Output stream 1 -> CSP Spatial Filter => #5
  Spatial Filter Coefficients = 3.895456e-002 3.778097e-002 2.938309e-002 -9.788274e-002 -3.968528e-002 6.916557e-002 -1.781311e-002 -4.550318e-002 1.838463e-003 -4.318400e-003 -4.758229e-002 8.746883e-002 -8.669490e-002 1.470763e-001 -3.010208e-002 7.847492e-002 -9.258204e-002 -1.588618e-001 3.019603e-002 3.670722e-001 -1.344270e-001 -2.053658e-002 1.669169e-002 -5.694708e-002 1.752974e-002 -7.353498e-001 3.759703e-001 2.223170e-001 5.157963e-002 -2.557718e-002 6.962140e-002 1.587784e-002 -2.299291e-002 8.573178e-002 5.156094e-002 4.208025e-003 -3.231480e-004 -1.741512e-002 -1.317612e-001 1.216400e-001 -1.189420e-002 -1.193133e-002 -1.246434e-001 6.549134e-002 -1.568162e-001 7.802345e-002 1.501166e-001 -4.629385e-001 7.413952e-001 -3.052243e-001 6.240394e-004 4.298791e-002 -2.305681e-002 -1.543605e-002 6.986751e-002 -1.079839e-001 -1.920896e-002 -4.290301e-002 2.369059e-002 4.141804e-002 -3.499206e-003 -5.287728e-002 8.020091e-003 -1.265797e-003
  Number of Output Channels = 2
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = C:/Users/neuro/Documents/Neurow2020/Data/CSP/CSP-[2020.11.23-17.21.40].cfg
Data=#5 -> 0x341d3912 Signal display "CSP signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#5, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.04
-> Windowing => #9
  Window method = Hamming
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #11
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#9 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #13
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#9 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #15
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#9 -> Channel Selector "4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #17
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#11.Variance, Input - B=#13.Variance, Input - C=#15.Variance, Input - D=#17.Variance -> Simple DSP => #18
  Equation = A+B+C+D
Input - A=#11.Variance, Input - B=#18 -> Simple DSP => #19
  Equation = log(A)-log(B)
Input - A=#13.Variance, Input - B=#18 -> Simple DSP => #20
  Equation = log(A)-log(B)
Input - A=#15.Variance, Input - B=#18 -> Simple DSP => #21
  Equation = log(A)-log(B)
Input - A=#17.Variance, Input - B=#18 -> Simple DSP => #22
  Equation = log(A)-log(B)
Input stream 1=#19, Input stream 2=#20, Input stream 3=#21, Input stream 4=#22 -> Feature aggregator => #23
Input signal=#5, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.04
-> Windowing => #26
  Window method = Hamming
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #28
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#26 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #30
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#26 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #32
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#26 -> Channel Selector "4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #34
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#28.Variance, Input - B=#30.Variance, Input - C=#32.Variance, Input - D=#34.Variance -> Simple DSP => #35
  Equation = A+B+C+D
Input - A=#28.Variance, Input - B=#35 -> Simple DSP => #36
  Equation = log(A)-log(B)
Input - A=#30.Variance, Input - B=#35 -> Simple DSP => #37
  Equation = log(A)-log(B)
Input - A=#32.Variance, Input - B=#35 -> Simple DSP => #38
  Equation = log(A)-log(B)
Input - A=#34.Variance, Input - B=#35 -> Simple DSP => #39
  Equation = log(A)-log(B)
Input stream 1=#36, Input stream 2=#37, Input stream 3=#38, Input stream 4=#39 -> Feature aggregator => #40
Timeout => #41
  Timeout delay = 530
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#3.Output stream 2, Input stimulations 2=#41 -> Stimulation multiplexer => #42
Stimulations=#42, Features for class 1=#23, Features for class 2=#40 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/neuro/Documents/Neurow2020/Data/Classifier/Classifier-[$core{date}-$core{time}].cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 GDF file reader
  Filename = C:/Users/Audrey/Documents/Lisbon_data/Lisbon_data/newGame/2_graz/MI-AF.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
