OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)

Generic stream reader => #0
  Filename = C:/Users/neuro/Documents/Neurow2019/Data/[2020.03.05-11.50.38].ov
#0.Output stream 2 -> Channel Selector "BCI-SSVEP channels"
  Channel List = 3:8; 10:14; 16:19; 21:25; 27:30
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
#3.Output stream 1 -> CSP Spatial Filter => #4
  Spatial Filter Coefficients = 3.653201e-002 -1.714749e-001 3.999848e-004 1.148893e-001 2.778198e-001 -6.581524e-001 -2.602285e-001 6.148128e-001 -8.457656e-001 3.374736e-001 6.381000e-002 8.112943e-002 2.874585e-001 -4.854865e-003 2.313731e-001 -1.547545e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = C:/Users/neuro/Documents/Neurow2019/CSP_files/Hamm05-03.cfg
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = 0.5
  Epoch intervals (in sec) = 0.04
-> Windowing => #7
  Window method = Hamming
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #9
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#7 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #11
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#7 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #13
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#7 -> Channel Selector "4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #15
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#9.Variance, Input - B=#11.Variance, Input - C=#13.Variance, Input - D=#15.Variance -> Simple DSP => #16
  Equation = A+B+C+D
Input - A=#9.Variance, Input - B=#16 -> Simple DSP => #17
  Equation = log(A)-log(B)
Input - A=#11.Variance, Input - B=#16 -> Simple DSP => #18
  Equation = log(A)-log(B)
Input - A=#13.Variance, Input - B=#16 -> Simple DSP => #19
  Equation = log(A)-log(B)
Input - A=#15.Variance, Input - B=#16 -> Simple DSP => #20
  Equation = log(A)-log(B)
Input stream 1=#17, Input stream 2=#18, Input stream 3=#19, Input stream 4=#20 -> Feature aggregator => #21
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 0.5
  Epoch intervals (in sec) = 0.04
-> Windowing => #24
  Window method = Hamming
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #26
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#24 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #28
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#24 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #30
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#24 -> Channel Selector "4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #32
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#26.Variance, Input - B=#28.Variance, Input - C=#30.Variance, Input - D=#32.Variance -> Simple DSP => #33
  Equation = A+B+C+D
Input - A=#26.Variance, Input - B=#33 -> Simple DSP => #34
  Equation = log(A)-log(B)
Input - A=#28.Variance, Input - B=#33 -> Simple DSP => #35
  Equation = log(A)-log(B)
Input - A=#30.Variance, Input - B=#33 -> Simple DSP => #36
  Equation = log(A)-log(B)
Input - A=#32.Variance, Input - B=#33 -> Simple DSP => #37
  Equation = log(A)-log(B)
Input stream 1=#34, Input stream 2=#35, Input stream 3=#36, Input stream 4=#37 -> Feature aggregator => #38
Stimulations=#3.Output stream 2, Features for class 1=#21, Features for class 2=#38 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/neuro/Documents/Neurow2020/BCI_SSVEP/Data/Classifier/[$core{date}-$core{time}].cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
