OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Lisbon Hamming - Online
Comment
  8-30Hz
Comment
  <- used to see output of classifier
  (sends to pre-built Analog VRPN Client)

0x341d3912 Generic stream reader
  Filename = C:/Users/Audrey/OneDrive/Desktop/M-ITI/NeuRow2019/NeuAugVR2020/Scenarios-Hospital/Data/Online/C09/[2020.02.27-11.55.41]_Online.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Channel Selector "BCI-SSVEP channels"
  Channel List = 3:8; 10:14; 16:19; 21:25; 27:30
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Graz Motor Imagery BCI Stimulator => #4
  Lua Script = C:/Users/neuro/Desktop/BCI-VR stuff/OV-Scenarios/NeuRowCueBased/motor-imagery-bci-graz-stimulator-fmri-block.lua
  Number of Trials for Each Class = 4
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 30
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 1.500
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750000
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 2.500
-> Switch director => #5
  Lua Script = C:/Users/neuro/Desktop/NeuRow/OVScenarios/motor-imagery-bci-epoch-selector.lua
  offset = 0.1
  duration = 1
Triggers=#5, Matrix=#3 -> Stream Switch => #6
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#6.Output -> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/neuro/Documents/Neurow2020/Data/CSP/CSP-[2020.11.23-17.21.40].cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.04
-> Windowing => #9
  Window method = Hamming
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #11
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#9 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #13
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#9 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #15
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#9 -> Channel Selector "4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #17
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#11.Variance, Input - B=#13.Variance, Input - C=#15.Variance, Input - D=#17.Variance -> Simple DSP => #18
  Equation = A+B+C+D
Input - A=#11.Variance, Input - B=#18 -> Simple DSP => #19
  Equation = log(A)-log(B)
Input - A=#13.Variance, Input - B=#18 -> Simple DSP => #20
  Equation = log(A)-log(B)
Input - A=#15.Variance, Input - B=#18 -> Simple DSP => #21
  Equation = log(A)-log(B)
Input - A=#17.Variance, Input - B=#18 -> Simple DSP => #22
  Equation = log(A)-log(B)
Input stream 1=#19, Input stream 2=#20, Input stream 3=#21, Input stream 4=#22 -> Feature aggregator => #23
Features=#23 -> Classifier processor => #24
  Filename to load configuration from = C:/Users/neuro/Documents/Neurow2020/Data/Classifier/Classifier-[2020.11.23-17.23.17].cfg
#24.Probability values -> Analog VRPN Server
  Peripheral name = openvibe-vrpn
#24.Probability values -> 0x341d3912 Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
Data=#1.Signal stream, Stimulations=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#1.Signal stream, Stimulation=#4 -> GDF file writer
  Filename = C:/Users/neuro/Documents/Neurow2020/Data/GDF/Online-[$core{date}-$core{time}].gdf
Input stream 2=#1.Signal stream, Input stream 3=#4 -> Generic stream writer
  Filename = C:/Users/neuro/Documents/Neurow2020/Data/OV/Online-[$core{date}-$core{time}].ov
  Use compression = false
#4 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
#4 -> Identity => #31
-> Stimulation Filter => #32
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
Targets=#32, Classification results=#24.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#32, LDA=#24.Labels -> Accuracy Measure
Stimulations=#31, Amplitude=#24.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Analog VRPN Client => #37
  Peripheral name = openvibe-vrpn@localhost
  Sampling Rate = 512
  Number of Channels = 2
  Sample Count per Sent Block = 32
-> Channel Selector "1" => #38
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#37 -> Channel Selector "2" => #39
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input - A=#38, Input - B=#39 -> Simple DSP => #40
  Equation = A-B
Input signal=#40, Input stimulations=#4 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#40 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false

0x341d3912 GDF file reader
  Filename = C:/Users/neuro/Desktop/NeuRow/4_online/online-S01.gdf
  Samples per buffer = 32
  Subtract physical minimum = false

0x341d3912 LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers

0x341d3912 Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt

0x341d3912 Button VRPN Server
  Peripheral name = openvibe_vrpn_button
  Button 1 ON = OVTK_StimulationId_Label_01
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_00

0x341d3912 Graz Motor Imagery BCI Stimulator
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 12
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 5
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
