OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Modifications

  New frequency features are added

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "BCI-SSVEP channels"
  Channel List = 3:8; 10:14; 16:19; 21:25; 27:30
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
#0.Stimulations -> Switch director => #3
  Lua Script = C:/Users/neuro/Documents/Neurow2020/OVScenarios/motor-imagery-bci-epoch-selector.lua
  offset = 0.1
  duration = 1
Triggers=#3, Matrix=#2 -> Stream Switch => #4
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#4.Output -> CSP Spatial Filter
  Spatial Filter Coefficients = 3.653201e-002 -1.714749e-001 3.999848e-004 1.148893e-001 2.778198e-001 -6.581524e-001 -2.602285e-001 6.148128e-001 -8.457656e-001 3.374736e-001 6.381000e-002 8.112943e-002 2.874585e-001 -4.854865e-003 2.313731e-001 -1.547545e-001
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = C:/Users/neuro/Documents/Neurow2019/Data/Lisbon/3_neurow/ROW-FB-csp.gdf
-> Time based epoching
  Epoch duration (in sec) = 0.5
  Epoch intervals (in sec) = 0.04
-> Windowing => #7
  Window method = Hamming
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #9
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#7 -> Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #11
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#7 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #13
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
#7 -> Channel Selector "4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Univariate Statistics => #15
  Mean = false
  Variance = true
  Range = false
  Median = false
  IQR = false
  Percentile = false
  Percentile value = 30
Input - A=#9.Variance, Input - B=#11.Variance, Input - C=#13.Variance, Input - D=#15.Variance -> Simple DSP => #16
  Equation = A+B+C+D
Input - A=#9.Variance, Input - B=#16 -> Simple DSP => #17
  Equation = log(A)-log(B)
Input - A=#11.Variance, Input - B=#16 -> Simple DSP => #18
  Equation = log(A)-log(B)
Input - A=#13.Variance, Input - B=#16 -> Simple DSP => #19
  Equation = log(A)-log(B)
Input - A=#15.Variance, Input - B=#16 -> Simple DSP => #20
  Equation = log(A)-log(B)
Input stream 1=#17, Input stream 2=#18, Input stream 3=#19, Input stream 4=#20 -> Feature aggregator => #21
Features=#21 -> Classifier processor => #22
  Filename to load configuration from = C:/Users/neuro/Documents/Neurow2019/Data/Lisbon/3_neurow/ROW-FB-class.gdf
#22.Hyperplane distance -> Analog VRPN Server
  Peripheral name = openvibe-vrpn
Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = C:/Users/neuro/Documents/Neurow2019/Data/Online/[$core{date}-$core{time}].ov
  Use compression = false
Data=#0.Signal stream, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = C:/Users/neuro/Documents/Neurow2020/BCI_SSVEP/Data/GDF/Online-[$core{date}-$core{time}].gdf
Input stimulations=#0.Stimulations -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#0.Stimulations -> Identity => #28
-> Stimulation Filter => #29
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_0F
Targets=#29, Classification results=#22.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#29, Classifier 1=#22.Labels -> Classifier Accuracy Measure
Stimulations=#28, Amplitude=#22.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Channel Selector "1:32"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart

0x341d3912 Generic stream reader
  Filename = C:/Users/neuro/Documents/Neurow2019/Data/Lisbon/4_online/online-FB.gdf

0x341d3912 Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

Analog VRPN Client => #37
  Peripheral name = openvibe-vrpn@localhost
  Sampling Rate = 512
  Number of Channels = 2
  Sample Count per Sent Block = 32
-> Channel Selector "1" => #38
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
#37 -> Channel Selector "2" => #39
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
Input - A=#38, Input - B=#39 -> Simple DSP => #40
  Equation = A-B
Input signal=#40 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#40 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
