OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Train CSP
Comment
  8-30Hz

Generic stream reader => #0
  Filename = C:/Users/Audrey/OneDrive - Mississippi State University/Desktop/M-ITI/NeuRow2019/MotorImageryBCIexp/Baseline_condition/Healthy_young/Motor_imagery/6/[2019.07.22-14.26.50] - Copy.ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left trials" => #3
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#2.Output stream 2, Signal condition 1=#3, Signal condition 2=#4 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/Audrey/OneDrive - Mississippi State University/Desktop/M-ITI/NeuRow2019/MotorImageryBCIexp/Baseline_condition/Healthy_young/Motor_imagery/6/csp-spatial-filter.cfg
  Filter dimension = 2
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
0x341d3912 Timeout => #7
  Timeout delay = 450
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#2.Output stream 2, Input stimulations 2=#7 -> 0x341d3912 Stimulation multiplexer
