OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  8-30Hz

Generic stream reader => #0
  Filename = C:/Users/Audrey/OneDrive - Mississippi State University/Desktop/M-ITI/NeuRow2019/MotorImageryBCIexp/Baseline_condition/Healthy_young/Observation/1/[2019.07.24-16.44.57].ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> CSP Spatial Filter => #3
  Spatial Filter Coefficients = -1.082114e-001 4.685760e-001 -3.544043e-002 4.573300e-002 -2.572461e-002 2.025501e-002 -2.813483e-001 -1.096762e-001 3.726331e-002 -5.267634e-001 -5.803814e-002 2.409423e-001 -4.485025e-002 7.282470e-002 4.555725e-001 1.448566e-002 1.386524e-001 -9.009798e-002 -1.780710e-001 1.256969e-001 -5.130940e-002 2.987887e-002 -6.050551e-002 9.617017e-002 4.416526e-002 -7.618225e-002 2.121995e-002 -4.789311e-002 1.209106e-001 -7.247473e-003 3.267675e-002 1.537727e-002 -9.382764e-004 -5.727098e-003 -1.732264e-003 -2.238397e-003 1.155525e-002 8.075033e-003 7.448413e-004 -2.110711e-002 2.822916e-003 -3.109532e-002 6.749932e-003 9.074530e-003 1.675107e-002 5.889398e-003 1.221918e-002 5.992729e-003 6.732111e-003 -1.274952e-002 1.696124e-004 -2.419000e-004 2.906963e-002 -2.428724e-004 -3.349322e-002 1.252463e-002 -1.540250e-002 5.111605e-002 -7.378641e-001 -7.269145e-003 2.729030e-002 1.020217e-002 6.687131e-001 -2.451945e-003
  Number of Output Channels = 2
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = C:/Users/Audrey/OneDrive - Mississippi State University/Desktop/M-ITI/NeuRow2019/MotorImageryBCIexp/Baseline_condition/Healthy_young/Observation/1/csp-spatial-filter.cfg
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
Input signal=#3, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #15
Timeout => #16
  Timeout delay = 410
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#2.Output stream 2, Input stimulations 2=#16 -> Stimulation multiplexer => #17
Stimulations=#17, Features for class 1=#9, Features for class 2=#15 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/Audrey/OneDrive - Mississippi State University/Desktop/M-ITI/NeuRow2019/MotorImageryBCIexp/Baseline_condition/Healthy_young/Observation/1/classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 Channel Selector "6;7;8;11;12;25;23;22;28;29"
  Channel List = 6;7;8;11;12;25;23;22;28;29
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = -1;-1;4;-1;-1;0;0;0;0;0;0;0;0;0;0;4;-1;-1;-1;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
